 namespace _Method { #include "HSLAppsLib_V1_7\\HSLAppsLib_V1_7.hsl" }
 namespace _Method { #include "HSLLabwrAccess\\HSLLabwrAccess.hsl" }
 namespace _Method { #include "HSLAppsLib_V1_6.hsl" }
 namespace _Method { #include "HSLMlStarStepReturnLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStatistics.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLVantageLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Inheco ODTC\\Inheco ODTC.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "4titude a4S\\4titude a4S.hsl" }
 namespace _Method { #include "Brooks XPeel\\HSLBrooksAutomationXPeel.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
#include "Transformation_Layout.res"
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
variable step_2_checked;
variable step_1_checked;
variable loopCounter1;
variable loopVar;
variable step_3_checked;
variable DW_Res_path;
variable PCR_path;
dialog customDialog_4;
dialog customDialog_5;
variable Tip_50uL_path;
variable PEGLiAc_liqClass;
variable DNA_liqClass;
variable t_Incubation_Time;
variable t_DNA_TransferVol;
variable t_PEG_LiAc_TransferVol;
variable Tip_300uL_path;
variable t_numMixes;
variable t_ssDNA_TransferVol;
variable tipCarrier;
variable t_Incubation_Time_sec;
variable false;
variable ssDNA_liqClass;
variable t_mixVol;
timer IncubationTimer;
sequence PCR_DNA_Seq;
sequence Tips_50uL_1_seq;
sequence Tips_50uL_2_seq;
sequence Tips_300uL_1_seq;
sequence PCR_ssDNA_Seq;
sequence PCR_Transformation_Seq;
dialog customDialog_6;
dialog customDialog_7;
variable w_NumMixes;
variable w_SuperNatVol;
variable w_SuperNatHeight;
variable w_Water_TransferVol;
variable w_MixVol;
sequence DW_RES_Water_Seq;
sequence Tips_300uL_2_seq;
variable Qtray_path;
variable p_NumMixes;
variable p_MixVol;
variable p_VolWater;
variable p_NumQTrays;
variable p_PlatingVol;
sequence QTray_1_Seq;
sequence QTray_2_Seq;
variable loopCounter7;
variable xCoord;
variable var_str_pos_id;
variable seqPos;
variable ResultsLL;
variable var_int_loop_counter;
variable var_str_lab_id;
variable var_flo_height_LL;
variable dispH_MaxValue;
variable Plating_LiqClass;
variable angle;
variable var_flo_height_LL_fromZero;
variable zCoord;
variable yCoord;
variable disp_H_arr[];
dialog customDialog_8;
dialog customDialog_9;
variable QTray_Plating_PCR_path;
variable DW_Plate_path;
variable strPreMethod;
variable strLockID;
variable strTrace;
variable bln_simMode;
variable intSiLAReturnValue;
variable blnSimulationMode;
variable blnSuccess;
variable strIPAddressDevice1;
variable strProtocolFile;
variable strSiLAMessage;
variable int_ODTC_DeviceID;
variable strMethod;
variable intPriority;
variable arrstrStatusNames[];
variable arrintExecutionTimes[];
variable arrintRequestIDs[];
variable _arrblnInitialized[];
variable arrstrStatusValues[];
variable intExecutionTime;
variable intRequestID;
variable at_temp;
variable strTime;
variable arrActualTemps[];
variable arrActualTempsNames[];
sequence PCR_Transformation_Transport;
timer HeatShock_Timer;
variable mix_again;
variable loopCounter2;
dialog customDialog_10;
variable mix_again_NO_checked;
variable mix_again_YES_checked;
variable loopCounter3;
dialog customDialog_11;
dialog customDialog_12;
dialog customDialog_13;
dialog customDialog_14;
dialog customDialog_15;
sequence DW_RES_MasterMix_Seq;
variable _intModuleD1;
variable intTemperature;
variable intError;
variable setTemperature;
variable intDeviceStatus;
variable intHeaterStatus;
variable intWarning;
variable intCOM_Xpeel;
variable intInstrumentID_Xpeel;
variable arrReturnPerformPeel[];
dialog customDialog_16;
variable sealTime;
variable tipWasteVar;
global device ML_STAR ("Transformation_Layout.lay", "ML_STAR", hslTrue);
global device CustomCabinet ("Transformation_Layout.lay", "CustomCabinet", hslTrue);
global device EntryExit ("Transformation_Layout.lay", "EntryExit", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("NOTE: running this method may require additional software libraries and/or labware definitions. Those additional software libraries and/or labware definitions are subject to the terms and conditions of each of their own licenses."));
    MECC::TraceComment(Translate("V4:\n\nFixing issues MAstolfi saw 10/24/24\nTBD: Add in breathable sealign step (is it worth it to change the seal rolls?)\n"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    Plating_LiqClass = Translate("ESE_300uL_Filter_Water_DSE");
    if(0){
      PEGLiAc_liqClass = Translate("ESE_300ul_Filter_PEG_LiAC_DispenseSurface_Empty");
    }
    PEGLiAc_liqClass = Translate("ESE_300ul_Filter_LiOAc_DispenseSurface_Empty");
    DNA_liqClass = Translate("ESE_50uL_Filter_Water_DSE");
    ssDNA_liqClass = Translate("ESE_50uL_Filter_Water_DSE");
    Qtray_path = Translate("C:\Program Files (x86)\HAMILTON\LabWare\Automation Team Custom\Validated GenApps Labware\AUTO_48_300mL_QTRAY_Validated.rck");
    QTray_Plating_PCR_path = Translate("C:\Program Files (x86)\HAMILTON\LabWare\Automation Team Custom\Validated GenApps Labware\AUTO_96_200uL_PCR_FS_COLsort_Validated.rck");
    tipCarrier = Translate("GA_TIP_CAR_X2_13POS_0001");
    Tip_50uL_path = Translate("C:\Program Files (x86)\HAMILTON\LabWare\ML_STAR\TIP_50ulF_L.rck");
    Tip_300uL_path = Translate("C:\Program Files (x86)\HAMILTON\LabWare\ML_STAR\STF_L.rck");
    DW_Res_path = Translate("C:\Program Files (x86)\HAMILTON\LabWare\Automation Team Custom\Validated GenApps Labware\AUTO_1_300mL_DW_RES_Validated.rck");
    DW_Plate_path = Translate("C:\Program Files (x86)\HAMILTON\LabWare\Automation Team Custom\Validated GenApps Labware\AUTO_96_2mL_DWP_Validated.rck");
    PCR_path = Translate("C:\Program Files (x86)\HAMILTON\LabWare\Automation Team Custom\Validated GenApps Labware\AUTO_96_200uL_PCR_FS_Validated.rck");
    tipWasteVar = 2;
    loopVar = 1;
    {
      loopCounter1 = 0;
      while (loopVar == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        customDialog_6.InitCustomDialog("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");
        customDialog_6.ShowCustomDialog();
        step_1_checked = customDialog_6.GetCustomDialogProperty( "radioButton1.IsChecked" );
        step_2_checked = customDialog_6.GetCustomDialogProperty( "radioButton2.IsChecked" );
        step_3_checked = customDialog_6.GetCustomDialogProperty( "radioButton3.IsChecked" );
        if (step_1_checked == 1)
        {
          HSLVantageLib::TurnDeckLightOn(ML_STAR, 100);
          customDialog_1.InitCustomDialog("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");
          customDialog_1.ShowCustomDialog();
          t_DNA_TransferVol = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
          t_ssDNA_TransferVol = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
          t_Incubation_Time = customDialog_1.GetCustomDialogProperty( "numeric3.Value" );
          t_PEG_LiAc_TransferVol = customDialog_1.GetCustomDialogProperty( "numeric4.Value" );
          t_mixVol = customDialog_1.GetCustomDialogProperty( "numeric5.Value" );
          t_numMixes = customDialog_1.GetCustomDialogProperty( "numeric6.Value" );
          t_Incubation_Time_sec = t_Incubation_Time * 60;
          MECC::TraceComment(Translate("===== INITIALIZE SEALER=========="));
          blnSuccess = Fourtitude_a4S::Initialize(10, ASWGLOBAL::BOOL::FALSE, _intModuleD1);
          MECC::TraceComment(Translate("===== MOVE PLATE SHUTTLE OUT=========="));
          blnSuccess = Fourtitude_a4S::MoveShuttle(_intModuleD1, Fourtitude_a4S::Shuttle::Open);
          MECC::TraceComment(Translate("=========GET STATUS OF PLATE SEALER============="));
          blnSuccess = Fourtitude_a4S::GetStatus(_intModuleD1, intTemperature, intDeviceStatus, intHeaterStatus, intError, intWarning);
          MECC::TraceComment(Translate("=============SET TEMPERATURE =============="));
          setTemperature = 165;
          blnSuccess = Fourtitude_a4S::SetTemperature(_intModuleD1, setTemperature);
          if (blnSuccess == 1)
          {
            TrcTrace(Translate("Sealer Connected. Sealer Return Value:"), blnSuccess);
          }
          if (blnSuccess == 0)
          {
            customDialog_16.InitCustomDialog("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");
            customDialog_16.ShowCustomDialog();
            abort;
          }
          intInstrumentID_Xpeel = 1;
          intCOM_Xpeel = 1;
          HSLBrooksAutomationXPeel::AddXPeelConnection(intInstrumentID_Xpeel, intCOM_Xpeel);
          HSLBrooksAutomationXPeel::MovePlateTrayHome(intInstrumentID_Xpeel);
          arrReturnPerformPeel = HSLBrooksAutomationXPeel::GetXPeelStatus(intInstrumentID_Xpeel);
          HSLBrooksAutomationXPeel::DisableSimulation();
          HSLBrooksAutomationXPeel::SetPlateCheck(intInstrumentID_Xpeel, 1);
          strIPAddressDevice1 = "192.168.1.50";
          strLockID = "ODTC_SY_test";
          strProtocolFile = "C:\Program Files (x86)\HAMILTON\Library\Inheco ODTC\DeviceScripts\ESE-Automation\SY_42C_Incubation.xml";
          strPreMethod = Translate("SY_42C_tempInit");
          strMethod = Translate("SY_42C_Incubation");
          intPriority = 1;
          _arrblnInitialized.SetSize(4);
          arrintExecutionTimes.SetSize(4);
          arrintRequestIDs.SetSize(4);
          arrstrStatusNames.SetSize(0);
          arrstrStatusValues.SetSize(7);
          arrstrStatusNames.AddAsLast("DeviceId");
          arrstrStatusNames.AddAsLast("State");
          arrstrStatusNames.AddAsLast("Locked");
          arrstrStatusNames.AddAsLast("PMSId");
          arrstrStatusNames.AddAsLast("Current time");
          arrstrStatusNames.AddAsLast("SiLA return value");
          arrstrStatusNames.AddAsLast("SiLA message");
          MECC::TraceComment(Translate("======== CONNECTING TO ODTC ==============="));
          blnSuccess = Inheco_ODTC::Standard::Connect("", strIPAddressDevice1, "", bln_simMode, int_ODTC_DeviceID, strSiLAMessage);
          if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
          {
            strTrace = StrConcat4("SiLA message '", strSiLAMessage, "' received by device ", int_ODTC_DeviceID);
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, Translate("Connect"), Translate(""), strTrace);
          }
          MECC::TraceComment(Translate("========RESET ODTC ==============="));
          blnSuccess = Inheco_ODTC::Standard::Reset(int_ODTC_DeviceID, blnSimulationMode, 20, strLockID, Translate("ODTC1"), "ODTC Demo", intSiLAReturnValue, strSiLAMessage);
          APPSLIB_V1_7::TraceValues(Translate("Bln vasue for ODTC RESET: "), blnSuccess, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          blnSuccess = Inheco_ODTC::Standard::GetStatus(int_ODTC_DeviceID, arrstrStatusValues.ElementAt( 1 -1), arrstrStatusValues.ElementAt( 2 -1), arrstrStatusValues.ElementAt( 3 -1), arrstrStatusValues.ElementAt( 4 -1), arrstrStatusValues.ElementAt( 5 -1), arrstrStatusValues.ElementAt( 6 -1), arrstrStatusValues.ElementAt( 7 -1));
          MECC::TraceComment(Translate("======== STATUS  ARRAY VALUES PRIOR TO INIT: ==============="));
          APPSLIB_V1_7::TraceArray(Translate("Get status array"), arrstrStatusValues);
          blnSuccess = Inheco_ODTC::Standard::Initialize(int_ODTC_DeviceID, strLockID, intSiLAReturnValue, strSiLAMessage);
          blnSuccess = Inheco_ODTC::Standard::GetStatus(int_ODTC_DeviceID, arrstrStatusValues.ElementAt( 1 -1), arrstrStatusValues.ElementAt( 2 -1), arrstrStatusValues.ElementAt( 3 -1), arrstrStatusValues.ElementAt( 4 -1), arrstrStatusValues.ElementAt( 5 -1), arrstrStatusValues.ElementAt( 6 -1), arrstrStatusValues.ElementAt( 7 -1));
          MECC::TraceComment(Translate("======== STATUS  ARRAY VALUES AFTER INIT: ==============="));
          TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, "", "has a value of", arrstrStatusNames, arrstrStatusValues);
          blnSuccess = Inheco_ODTC::Standard::DownloadProtocol(int_ODTC_DeviceID, strLockID, strProtocolFile, intSiLAReturnValue, strSiLAMessage);
          APPSLIB_V1_7::TraceValues(Translate("Download protocol trace"), blnSuccess, Translate("SILAS Return value: "), intSiLAReturnValue, Translate("SILAS return Message"), strSiLAMessage, Translate(""), Translate(""));
          blnSuccess = Inheco_ODTC::Standard::ExecuteMethod(int_ODTC_DeviceID, strLockID, strPreMethod, intPriority, intExecutionTime, intRequestID, intSiLAReturnValue, strSiLAMessage);
          APPSLIB_V1_7::TraceValues(Translate("EXECUTE METHOD STATUS"), blnSuccess, Translate("SILAS Return value: "), intSiLAReturnValue, Translate("SILAS return Message"), strSiLAMessage, Translate(""), Translate(""));
          at_temp = 0;
          {
            loopCounter1 = 0;
            while (at_temp == 0)
            {
              loopCounter1 = loopCounter1 + 1;
              blnSuccess = Inheco_ODTC::Standard::ReadActualTemperature(int_ODTC_DeviceID, strLockID, strTime, arrActualTemps, arrActualTempsNames, intSiLAReturnValue, strSiLAMessage);
              APPSLIB_V1_7::TraceArray2(Translate("Read temp arrays"), arrActualTemps, arrActualTempsNames);
              APPSLIB_V1_7::TraceValues(arrActualTemps.ElementAt( 6 -1), Translate("arractualtemps[6] above"), 0, 0, 0, 0, 0, 0);
              if (arrActualTemps.ElementAt( 6 -1) == 42)
              {
                at_temp = 1;
              }
            }
          }
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, DW_Res_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("DW_RES_MasterMix"), Translate(""));
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, PCR_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("2"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("PCR_DNA"), Translate(""));
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, PCR_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("3"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("PCR_ssDNA"), Translate(""));
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, PCR_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("4"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("PCR_Transformation"), Translate(""));
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("DW_RES_MasterMix"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, DW_RES_MasterMix_Seq);
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("PCR_DNA"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, PCR_DNA_Seq);
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("PCR_ssDNA"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, PCR_ssDNA_Seq);
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("PCR_Transformation"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, PCR_Transformation_Seq);
          SeqAdd(PCR_Transformation_Transport, Translate("PCR_Transformation"), Translate("A1"));
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Tip_50uL_path, Translate("GA_TIP_CAR_X2_13POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("50uL_Tips_1"), Translate(""));
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Tip_50uL_path, Translate("GA_TIP_CAR_X2_13POS_0001"), Translate("2"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("50uL_Tips_2"), Translate(""));
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Tip_300uL_path, Translate("GA_TIP_CAR_X2_13POS_0001"), Translate("3"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("300uL_Tips_1"), Translate(""));
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("50uL_Tips_1"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, Tips_50uL_1_seq);
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("50uL_Tips_2"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, Tips_50uL_2_seq);
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("300uL_Tips_1"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, Tips_300uL_1_seq);
          Tips_50uL_1_seq.SetCurrentPosition(1);
          Tips_50uL_2_seq.SetCurrentPosition(1);
          Tips_300uL_1_seq.SetCurrentPosition(1);
          customDialog_5.InitCustomDialog("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");
          customDialog_5.ShowCustomDialog();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          PCR_Transformation_Seq.SetCurrentPosition(1);
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          PCR_Transformation_Seq.SetCurrentPosition(1);
          if( 0 == IncubationTimer.SetTimer(t_Incubation_Time_sec) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == IncubationTimer.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          mix_again = 1;
          {
            loopCounter2 = 0;
            while (mix_again == 1)
            {
              loopCounter2 = loopCounter2 + 1;
              PCR_Transformation_Seq.SetCurrentPosition(1);
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              customDialog_10.InitCustomDialog("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");
              customDialog_10.ShowCustomDialog();
              mix_again_YES_checked = customDialog_10.GetCustomDialogProperty( "radioButton1.IsChecked" );
              mix_again_NO_checked = customDialog_10.GetCustomDialogProperty( "radioButton2.IsChecked" );
              t_numMixes = customDialog_10.GetCustomDialogProperty( "numeric1.Value" );
              t_mixVol = customDialog_10.GetCustomDialogProperty( "numeric2.Value" );
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              if (mix_again_NO_checked == 1)
              {
                mix_again = 0;
              }
              if (mix_again_YES_checked == 1)
              {
                ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
                PCR_Transformation_Seq.SetCurrentPosition(1);
              }
            }
          }
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          PCR_Transformation_Seq.SetCurrentPosition(1);
          MECC::TraceComment(Translate("================== MOVE PLATE ONTO SEAL SHUTTLE ================="));
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          MECC::TraceComment(Translate("============== Seal COMP CELLS Plate  ==============="));
          MECC::TraceComment(Translate("=============== Loop , return Temp until reached TARGET TEMP ================="));
          intHeaterStatus = Fourtitude_a4S::DeviceStatus::Invalid;
          {
            while (intHeaterStatus != Fourtitude_a4S::HeaterStatus::Ready)
            {
              blnSuccess = Fourtitude_a4S::GetStatus(_intModuleD1, intTemperature, intDeviceStatus, intHeaterStatus, intError, intWarning);
            }
          }
          MECC::TraceComment(Translate("=============== REACHED TARGET SEAL TEMP ================="));
          MECC::TraceComment(Translate("=========== START SEALING =============="));
          sealTime = 3.0;
          Fourtitude_a4S::Seal(_intModuleD1, sealTime);
          MECC::TraceComment(Translate("=============== WAIT FOR SEALING TO COMPLETE ==============="));
          intDeviceStatus = Fourtitude_a4S::DeviceStatus::SingleWork;
          {
            while (intDeviceStatus == Fourtitude_a4S::DeviceStatus::SingleWork)
            {
              blnSuccess = Fourtitude_a4S::GetStatus(_intModuleD1, intTemperature, intDeviceStatus, intHeaterStatus, intError, intWarning);
            }
          }
          PCR_Transformation_Transport.SetCurrentPosition(1);
          blnSuccess = Inheco_ODTC::Standard::OpenDoor(int_ODTC_DeviceID, strLockID, intSiLAReturnValue, strSiLAMessage);
          MECC::TraceComment(Translate("============ REMOVE PLATE FROM SEALER =============="));
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          if( 0 == HeatShock_Timer.SetTimer(3600) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == HeatShock_Timer.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("PCR_DNA"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("PCR_ssDNA"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("PCR_Transformation"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("DW_RES_MasterMix"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("50uL_Tips_1"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("50uL_Tips_2"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("300uL_Tips_1"));
          customDialog_4.InitCustomDialog("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");
          customDialog_4.ShowCustomDialog();
        }
        if (step_2_checked == 1)
        {
          HSLVantageLib::TurnDeckLightOn(ML_STAR, 100);
          customDialog_3.InitCustomDialog("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");
          customDialog_3.ShowCustomDialog();
          w_SuperNatVol = customDialog_3.GetCustomDialogProperty( "numeric1.Value" );
          w_SuperNatHeight = customDialog_3.GetCustomDialogProperty( "numeric2.Value" );
          w_Water_TransferVol = customDialog_3.GetCustomDialogProperty( "numeric3.Value" );
          w_MixVol = customDialog_3.GetCustomDialogProperty( "numeric4.Value" );
          w_NumMixes = customDialog_3.GetCustomDialogProperty( "numeric5.Value" );
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, DW_Res_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("DW_RES_Water"), Translate(""));
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, PCR_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("2"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("PCR_Transformation"), Translate(""));
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("DW_RES_Water"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, DW_RES_Water_Seq);
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("PCR_Transformation"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, PCR_Transformation_Seq);
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Tip_300uL_path, Translate("GA_TIP_CAR_X2_13POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("300uL_Tips_1"), Translate(""));
          HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Tip_300uL_path, Translate("GA_TIP_CAR_X2_13POS_0001"), Translate("2"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("300uL_Tips_2"), Translate(""));
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("300uL_Tips_1"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, Tips_300uL_1_seq);
          HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("300uL_Tips_2"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, Tips_300uL_2_seq);
          customDialog_7.InitCustomDialog("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");
          customDialog_7.ShowCustomDialog();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          PCR_Transformation_Seq.SetCurrentPosition(1);
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          mix_again = 1;
          {
            loopCounter3 = 0;
            while (mix_again == 1)
            {
              loopCounter3 = loopCounter3 + 1;
              PCR_Transformation_Seq.SetCurrentPosition(1);
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              customDialog_11.InitCustomDialog("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");
              customDialog_11.ShowCustomDialog();
              mix_again_YES_checked = customDialog_11.GetCustomDialogProperty( "radioButton1.IsChecked" );
              mix_again_NO_checked = customDialog_11.GetCustomDialogProperty( "radioButton2.IsChecked" );
              w_NumMixes = customDialog_11.GetCustomDialogProperty( "numeric1.Value" );
              w_MixVol = customDialog_11.GetCustomDialogProperty( "numeric2.Value" );
              ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
              if (mix_again_NO_checked == 1)
              {
                mix_again = 0;
              }
              if (mix_again_YES_checked == 1)
              {
                ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
                PCR_Transformation_Seq.SetCurrentPosition(1);
              }
            }
          }
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          customDialog_12.InitCustomDialog("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");
          customDialog_12.ShowCustomDialog();
          customDialog_13.InitCustomDialog("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");
          customDialog_13.ShowCustomDialog();
          ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
          PCR_Transformation_Seq.SetCurrentPosition(1);
          Tips_300uL_1_seq.SetCurrentPosition(1);
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("DW_RES_Water"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("PCR_Transformation"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("300uL_Tips_1"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("300uL_Tips_2"));
        }
        if (step_3_checked == 1)
        {
          HSLVantageLib::TurnDeckLightOn(ML_STAR, 100);
          customDialog_2.InitCustomDialog("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");
          customDialog_2.ShowCustomDialog();
          p_VolWater = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
          p_MixVol = customDialog_2.GetCustomDialogProperty( "numeric4.Value" );
          p_NumMixes = customDialog_2.GetCustomDialogProperty( "numeric5.Value" );
          p_PlatingVol = customDialog_2.GetCustomDialogProperty( "numeric2.Value" );
          p_NumQTrays = customDialog_2.GetCustomDialogProperty( "numeric3.Value" );
          if (p_NumQTrays == 1)
          {
            customDialog_8.InitCustomDialog("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");
            customDialog_8.ShowCustomDialog();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, DW_Res_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("DW_RES_Water"), Translate(""));
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, QTray_Plating_PCR_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("2"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("PCR_Transformation"), Translate(""));
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Qtray_path, Translate("GA_QTRAY_CAR_X2POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("QTray_1"), Translate(""));
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("DW_RES_Water"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, DW_RES_Water_Seq);
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("PCR_Transformation"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, PCR_Transformation_Seq);
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("QTray_1"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, QTray_1_Seq);
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Tip_300uL_path, Translate("GA_TIP_CAR_X2_13POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("300uL_Tips_1"), Translate(""));
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Tip_300uL_path, Translate("GA_TIP_CAR_X2_13POS_0001"), Translate("2"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("300uL_Tips_2"), Translate(""));
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("300uL_Tips_1"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, Tips_300uL_1_seq);
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("300uL_Tips_2"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, Tips_300uL_2_seq);
            ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            mix_again = 1;
            {
              loopCounter3 = 0;
              while (mix_again == 1)
              {
                loopCounter3 = loopCounter3 + 1;
                PCR_Transformation_Seq.SetCurrentPosition(1);
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                customDialog_14.InitCustomDialog("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");
                customDialog_14.ShowCustomDialog();
                mix_again_YES_checked = customDialog_14.GetCustomDialogProperty( "radioButton1.IsChecked" );
                mix_again_NO_checked = customDialog_14.GetCustomDialogProperty( "radioButton2.IsChecked" );
                p_NumMixes = customDialog_14.GetCustomDialogProperty( "numeric1.Value" );
                p_MixVol = customDialog_14.GetCustomDialogProperty( "numeric2.Value" );
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                if (mix_again_NO_checked == 1)
                {
                  mix_again = 0;
                }
                if (mix_again_YES_checked == 1)
                {
                  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
                  PCR_Transformation_Seq.SetCurrentPosition(1);
                }
              }
            }
            ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
            PCR_Transformation_Seq.SetCurrentPosition(1);
            disp_H_arr.SetSize(0);
            seqPos = 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            MECC::TraceComment(Translate("LOOPING over QTRAY1 (48wells)\n-0 Volume Aspirate\n-Measure Absolute Liquid level on deck\n-Calcualte Liquid level in Plate\n-Add deteceted Liquid Level to Disp H Array"));
            {
              loopCounter7 = 0;
              while (
                 (QTray_1_Seq.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, QTray_1_Seq, 1);
                loopCounter7 = loopCounter7 + 1;
                QTray_1_Seq.SetCurrentPosition(seqPos);
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                  	ResultsLL = arrRetValues[2];
                }
                TrcTrace(Translate("ABS liquid level"), ResultsLL);
                {
                  for(var_int_loop_counter = 0; var_int_loop_counter < 8;)
                  {
                    var_int_loop_counter = var_int_loop_counter + 1;
                    var_str_lab_id = SeqGetLabwareId(QTray_1_Seq);
                    TrcTrace(Translate("Var string lab id"), var_str_lab_id);
                    var_str_pos_id = SeqGetPositionId(QTray_1_Seq);
                    TrcTrace(Translate("Var string pos id"), var_str_pos_id);
                    var_flo_height_LL_fromZero = StepReturn::GetLastLiquidLevel(var_int_loop_counter, ResultsLL);
                    TrcTrace(Translate("Liq level abs height returned:"), var_flo_height_LL_fromZero);
                    DevGetLabwarePositionEx(ML_STAR, var_str_lab_id, var_str_pos_id, xCoord, yCoord, zCoord, angle);
                    var_flo_height_LL = var_flo_height_LL_fromZero - zCoord;
                    TrcTrace(Translate("*****Liquid level height in well/tube:  "), var_flo_height_LL);
                    disp_H_arr.AddAsLast(var_flo_height_LL);
                  }
                }
                seqPos = seqPos + 8;
                QTray_1_Seq.SetCurrentPosition(seqPos);
                if (
                   (QTray_1_Seq.GetCurrentPosition() > 0 && QTray_1_Seq.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              QTray_1_Seq.SetMax(QTray_1_Seq.GetTotal());
              QTray_1_Seq.SetCurrentPosition(1);
            }
            APPSLIB_V1_6::TraceArray(Translate("disp H array"), disp_H_arr);
            MECC::TraceComment(Translate("Find max height in Disp H array"));
            dispH_MaxValue = HSLStatisitics::Stat_Max(disp_H_arr);
            MECC::TraceComment(Translate("Add 2mm to Max dispense H"));
            dispH_MaxValue = dispH_MaxValue + 1;
            APPSLIB_V1_6::TraceValues(Translate("Disp H max value"), dispH_MaxValue, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            MECC::TraceComment(Translate("Reset Qtray seq position"));
            QTray_1_Seq.SetCurrentPosition(1);
            MECC::TraceComment(Translate("1st Col transfer NOT in loop bc already have tips"));
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            {
              loopCounter1 = 0;
              while (
                 (QTray_1_Seq.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, QTray_1_Seq, 1);
                loopCounter1 = loopCounter1 + 1;
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (
                   (QTray_1_Seq.GetCurrentPosition() > 0 && QTray_1_Seq.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              QTray_1_Seq.SetMax(QTray_1_Seq.GetTotal());
              QTray_1_Seq.SetCurrentPosition(1);
            }
          }
          if (p_NumQTrays == 2)
          {
            customDialog_9.InitCustomDialog("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");
            customDialog_9.ShowCustomDialog();
            ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, DW_Res_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("DW_RES_Water"), Translate(""));
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, QTray_Plating_PCR_path, Translate("GA_Combined_MFX_CAR_10POS_0001"), Translate("2"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("PCR_Transformation"), Translate(""));
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Qtray_path, Translate("GA_QTRAY_CAR_X2POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("QTray_1"), Translate(""));
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Qtray_path, Translate("GA_QTRAY_CAR_X2POS_0001"), Translate("2"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("QTray_2"), Translate(""));
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("DW_RES_Water"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, DW_RES_Water_Seq);
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("PCR_Transformation"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, PCR_Transformation_Seq);
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("QTray_1"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, QTray_1_Seq);
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("QTray_2"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, QTray_2_Seq);
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Tip_300uL_path, Translate("GA_TIP_CAR_X2_13POS_0001"), Translate("1"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("300uL_Tips_1"), Translate(""));
            HSLLabwrAccess::AddLabwareToTemplateSite(ML_STAR, Tip_300uL_path, Translate("GA_TIP_CAR_X2_13POS_0001"), Translate("2"), HSLLabwrAccess::Enum::Orientation::Degree0, false, Translate("300uL_Tips_2"), Translate(""));
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("300uL_Tips_1"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, Tips_300uL_1_seq);
            HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, Translate("300uL_Tips_2"), HSLLabwrAccess::Enum::Sorting::ByPositionIDAscending, Tips_300uL_2_seq);
            ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            mix_again = 1;
            {
              loopCounter3 = 0;
              while (mix_again == 1)
              {
                loopCounter3 = loopCounter3 + 1;
                PCR_Transformation_Seq.SetCurrentPosition(1);
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                customDialog_15.InitCustomDialog("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");
                customDialog_15.ShowCustomDialog();
                mix_again_YES_checked = customDialog_15.GetCustomDialogProperty( "radioButton1.IsChecked" );
                mix_again_NO_checked = customDialog_15.GetCustomDialogProperty( "radioButton2.IsChecked" );
                p_NumMixes = customDialog_15.GetCustomDialogProperty( "numeric1.Value" );
                p_MixVol = customDialog_15.GetCustomDialogProperty( "numeric2.Value" );
                ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
                if (mix_again_NO_checked == 1)
                {
                  mix_again = 0;
                }
                if (mix_again_YES_checked == 1)
                {
                  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
                  PCR_Transformation_Seq.SetCurrentPosition(1);
                }
              }
            }
            ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
            PCR_Transformation_Seq.SetCurrentPosition(1);
            disp_H_arr.SetSize(0);
            seqPos = 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            MECC::TraceComment(Translate("LOOPING over QTRAY1 (48wells)\n-0 Volume Aspirate\n-Measure Absolute Liquid level on deck\n-Calcualte Liquid level in Plate\n-Add deteceted Liquid Level to Disp H Array"));
            {
              loopCounter7 = 0;
              while (
                 (QTray_1_Seq.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, QTray_1_Seq, 1);
                loopCounter7 = loopCounter7 + 1;
                QTray_1_Seq.SetCurrentPosition(seqPos);
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                  	ResultsLL = arrRetValues[2];
                }
                TrcTrace(Translate("ABS liquid level"), ResultsLL);
                {
                  for(var_int_loop_counter = 0; var_int_loop_counter < 8;)
                  {
                    var_int_loop_counter = var_int_loop_counter + 1;
                    var_str_lab_id = SeqGetLabwareId(QTray_1_Seq);
                    TrcTrace(Translate("Var string lab id"), var_str_lab_id);
                    var_str_pos_id = SeqGetPositionId(QTray_1_Seq);
                    TrcTrace(Translate("Var string pos id"), var_str_pos_id);
                    var_flo_height_LL_fromZero = StepReturn::GetLastLiquidLevel(var_int_loop_counter, ResultsLL);
                    TrcTrace(Translate("Liq level abs height returned:"), var_flo_height_LL_fromZero);
                    DevGetLabwarePositionEx(ML_STAR, var_str_lab_id, var_str_pos_id, xCoord, yCoord, zCoord, angle);
                    var_flo_height_LL = var_flo_height_LL_fromZero - zCoord;
                    TrcTrace(Translate("*****Liquid level height in well/tube:  "), var_flo_height_LL);
                    disp_H_arr.AddAsLast(var_flo_height_LL);
                  }
                }
                seqPos = seqPos + 8;
                QTray_1_Seq.SetCurrentPosition(seqPos);
                if (
                   (QTray_1_Seq.GetCurrentPosition() > 0 && QTray_1_Seq.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              QTray_1_Seq.SetMax(QTray_1_Seq.GetTotal());
              QTray_1_Seq.SetCurrentPosition(1);
            }
            APPSLIB_V1_6::TraceArray(Translate("disp H array"), disp_H_arr);
            MECC::TraceComment(Translate("Find max height in Disp H array"));
            dispH_MaxValue = HSLStatisitics::Stat_Max(disp_H_arr);
            MECC::TraceComment(Translate("Add 2mm to Max dispense H"));
            dispH_MaxValue = dispH_MaxValue + 1;
            APPSLIB_V1_6::TraceValues(Translate("Disp H max value"), dispH_MaxValue, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            MECC::TraceComment(Translate("Reset Qtray seq position"));
            QTray_1_Seq.SetCurrentPosition(1);
            MECC::TraceComment(Translate("1st Col transfer NOT in loop bc already have tips"));
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            {
              loopCounter1 = 0;
              while (
                 (QTray_1_Seq.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, QTray_1_Seq, 1);
                loopCounter1 = loopCounter1 + 1;
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (
                   (QTray_1_Seq.GetCurrentPosition() > 0 && QTray_1_Seq.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              QTray_1_Seq.SetMax(QTray_1_Seq.GetTotal());
              QTray_1_Seq.SetCurrentPosition(1);
            }
            disp_H_arr.SetSize(0);
            seqPos = 1;
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            MECC::TraceComment(Translate("LOOPING over QTRAY1 (48wells)\n-0 Volume Aspirate\n-Measure Absolute Liquid level on deck\n-Calcualte Liquid level in Plate\n-Add deteceted Liquid Level to Disp H Array"));
            {
              loopCounter7 = 0;
              while (
                 (QTray_2_Seq.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, QTray_2_Seq, 1);
                loopCounter7 = loopCounter7 + 1;
                QTray_2_Seq.SetCurrentPosition(seqPos);
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                {
                  	variable arrRetValues[];
                  	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
                  	ResultsLL = arrRetValues[2];
                }
                TrcTrace(Translate("ABS liquid level"), ResultsLL);
                {
                  for(var_int_loop_counter = 0; var_int_loop_counter < 8;)
                  {
                    var_int_loop_counter = var_int_loop_counter + 1;
                    var_str_lab_id = SeqGetLabwareId(QTray_2_Seq);
                    TrcTrace(Translate("Var string lab id"), var_str_lab_id);
                    var_str_pos_id = SeqGetPositionId(QTray_2_Seq);
                    TrcTrace(Translate("Var string pos id"), var_str_pos_id);
                    var_flo_height_LL_fromZero = StepReturn::GetLastLiquidLevel(var_int_loop_counter, ResultsLL);
                    TrcTrace(Translate("Liq level abs height returned:"), var_flo_height_LL_fromZero);
                    DevGetLabwarePositionEx(ML_STAR, var_str_lab_id, var_str_pos_id, xCoord, yCoord, zCoord, angle);
                    var_flo_height_LL = var_flo_height_LL_fromZero - zCoord;
                    TrcTrace(Translate("*****Liquid level height in well/tube:  "), var_flo_height_LL);
                    disp_H_arr.AddAsLast(var_flo_height_LL);
                  }
                }
                seqPos = seqPos + 8;
                QTray_2_Seq.SetCurrentPosition(seqPos);
                if (
                   (QTray_2_Seq.GetCurrentPosition() > 0 && QTray_2_Seq.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              QTray_2_Seq.SetMax(QTray_2_Seq.GetTotal());
              QTray_2_Seq.SetCurrentPosition(1);
            }
            APPSLIB_V1_6::TraceArray(Translate("disp H array"), disp_H_arr);
            MECC::TraceComment(Translate("Find max height in Disp H array"));
            dispH_MaxValue = HSLStatisitics::Stat_Max(disp_H_arr);
            MECC::TraceComment(Translate("Add 2mm to Max dispense H"));
            dispH_MaxValue = dispH_MaxValue + 1;
            APPSLIB_V1_6::TraceValues(Translate("Disp H max value"), dispH_MaxValue, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
            MECC::TraceComment(Translate("Reset Qtray seq position"));
            QTray_2_Seq.SetCurrentPosition(1);
            MECC::TraceComment(Translate("1st Col transfer NOT in loop bc already have tips"));
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            {
              loopCounter1 = 0;
              while (
                 (QTray_2_Seq.GetCurrentPosition() > 0)
              )
              {
                AlignSequences(hslTrue, QTray_2_Seq, 1);
                loopCounter1 = loopCounter1 + 1;
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
                ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
                if (
                   (QTray_2_Seq.GetCurrentPosition() > 0 && QTray_2_Seq.GetMax() == 0 )
                )
                { MECC::EndlessSequenceLoopWarning(GetFileName()); }
              }
              QTray_2_Seq.SetMax(QTray_2_Seq.GetTotal());
              QTray_2_Seq.SetCurrentPosition(1);
            }
          }
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("DW_RES_Water"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("PCR_Transformation"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("QTray_1"));
          APPSLIB_V1_7::DevRemoveLabware(ML_STAR, Translate("QTray_2"));
        }
      }
    }
  } }
